# 1 "/u/exp/stan/nmr/lists/pp/deptsp135"
;deptsp135
;avance-version (02/05/31)
;dept polarization transfer
;with decoupling during acquisition
;using shaped pulse for 180degree pulse on f1 - channel
;with 135 degree read pulse to give XH, XH3 positive and XH2 negative


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

"p4=p3*2"

"d2=1s/(cnst2*2)"

"d12=20u"


"DELTA=p1*4/3.1416"


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define delay MCWRK
define delay MCREST
"MCWRK = 0.500000*30m"
"MCREST = 30m - 30m"
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1 ze
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2 MCWRK  * 2 do:f2
LBLF0, MCREST
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  d1
  d12 pl1:f1 pl2:f2
  (p3 ph1):f2
  d2
  (p4 ph2):f2 
  (p1 ph4):f1
  d2 pl0:f1
  (p3*1.5 ph3):f2 (p12:sp2 ph5):f1
  d2
  DELTA pl12:f2
  go=2 ph31 cpd2:f2
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  MCWRK do:f2 wr #0
  MCWRK zd 
  lo to LBLF0 times td0

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exit


ph1=0
ph2=0 2 1 3
ph3=1 1 1 1 3 3 3 3
ph4=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph5=0 2 0 2 0 2 0 2 1 3 1 3 1 3 1 3
ph31=1 1 3 3 3 3 1 1 2 2 0 0 0 0 2 2
     3 3 1 1 1 1 3 3 0 0 2 2 2 2 0 0


;pl0 : 120dB
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp2: f1 channel - shaped pulse (180degree)
;spnam2: Crp60comp.4
;p1 : f1 channel -  90 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse
;     = 2msec for Crp60comp.4
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;NS: 4 * n, total number of scans: NS * TD0
;DS: 8
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;DELTA: delay to compensate for chemical shift evolution during
;          RF pulse in order to give same phase correction as
;          for reference 1D spectrum


;$Id: deptsp135,v 1.8 2002/06/12 09:04:31 ber Exp $
