# 1 "/u/exp/stan/nmr/lists/pp/cosygp60.prd"
;cosygp60.prd
;avance-version
;2D homonuclear shift correlation
;using gradient pulses for selection
;using 60 degree pulse - PRD 20090202

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

"d0=3u"
"d13=3u"


1 ze
2 d1
3 p1 ph1
  d0
  50u setnmr2|0 setnmr0|34|32|33
  p16:gp1
  d16
  p1*0.67 ph2
  d13
  p16:gp2
  d16
  4u setnmr2^0 setnmr0^34^32^33
  go=2 ph31
  d1 wr #0 if #0 id0 zd
  lo to 3 times td1
exit


ph1=0 2
ph2=0 0 2 2
ph31=0 2


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d13: short delay                                    [3 usec]
;d16: delay for homospoil/gradient recovery
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;NS: 1 * n
;DS: 16
;td1: number of experiments
;MC2: QF

;use gradient ratio:	gp 1 : gp 2
;			  10 :   10

;for z-only gradients:
;gpz1: 10%
;gpz2: 10%

;use gradient files:   
;gpnam1: SINE.100
;gpnam2: SINE.100
