# 1 "/u/exp/stan/nmr/lists/pp/mlevgp_mo"
;mlevgp_mo
;avance-version
;homonuclear Hartman-Hahn transfer using MLEV17 sequence
;   for mixing
;using two power levels for excitation and spinlock
;using gradient pulses for selection

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

"p5=p6*.667"
"p7=p6*2"
"d0=3u"
"d12=20u"

"SCALEF=p7*2/p5+0.5"
"FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF+0.5"
"l1=FACTOR1*SCALEF"

1 ze 
2 d1 
3 d12 pl1:f1
  p1 ph1
  d0
  50u setnmr2|0 setnmr0|34|32|33
  p16:gp1
  d16 pl10:f1
  (p17 ph26)
4 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22) 
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p5 ph23)
  lo to 4 times l1 
  (p17 ph26)
  p16:gp2
  d16
  4u setnmr2^0 setnmr0^34^32^33 
  go=2 ph31
  d1 wr #0 if #0 id0 zd
  lo to 3 times td1
exit 
  

ph1=0
ph22=3
ph23=0
ph24=1
ph25=2
ph26=0
ph31=0

;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;p1 : f1 channel -  90 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p16: homospoil/gradient pulse
;p17: f1 channel - trim pulse                             [2.5 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;l1: loop for MLEV cycle: (((p6*64) + p5) * l1) + (p17*2) = mixing time
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;NS: 1 * n
;DS: 16
;td1: number of experiments
;MC2: QF

;use gradient ratio:  gp 1 : gp 2
;                       10 :   10

;for z-only gradients:
;gpz1: 10%
;gpz2: 10%

;use gradient files:
;gpnam1: SINE.100
;gpnam2: SINE.100

